PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = delay_discounting
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
      text [set every repeat] = $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
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    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = delay_discounting_conditions.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'reward_today': 11, 'future_reward': 30, 'delay': 7},
      {'reward_today': 15, 'future_reward': 35, 'delay': 13},
      {'reward_today': 27, 'future_reward': 50, 'delay': 21},
      {'reward_today': 40, 'future_reward': 55, 'delay': 62},
      {'reward_today': 49, 'future_reward': 60, 'delay': 89},
      {'reward_today': 67, 'future_reward': 75, 'delay': 119},
      {'reward_today': 78, 'future_reward': 80, 'delay': 162},
      {'reward_today': 13, 'future_reward': 59, 'delay': 10},
      {'reward_today': 43, 'future_reward': 61, 'delay': 41},
      {'reward_today': 12, 'future_reward': 73, 'delay': 100},
      {'reward_today': 34, 'future_reward': 68, 'delay': 39},
      {'reward_today': 17, 'future_reward': 50, 'delay': 44},
      {'reward_today': 26, 'future_reward': 42, 'delay': 38},
      {'reward_today': 39, 'future_reward': 88, 'delay': 37},
      {'reward_today': 14, 'future_reward': 45, 'delay': 96},
      {'reward_today': 33, 'future_reward': 55, 'delay': 60},
      {'reward_today': 23, 'future_reward': 81, 'delay': 80},
      {'reward_today': 14, 'future_reward': 64, 'delay': 24},
      {'reward_today': 44, 'future_reward': 70, 'delay': 81},
      {'reward_today': 47, 'future_reward': 83, 'delay': 51},
      {'reward_today': 12, 'future_reward': 21, 'delay': 97},
      {'reward_today': 44, 'future_reward': 67, 'delay': 11},
      {'reward_today': 33, 'future_reward': 78, 'delay': 97},
      {'reward_today': 45, 'future_reward': 52, 'delay': 30},
      {'reward_today': 30, 'future_reward': 77, 'delay': 57},
      {'reward_today': 45, 'future_reward': 64, 'delay': 100},
      {'reward_today': 35, 'future_reward': 37, 'delay': 86}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
    Routine trial
  LoopTerminator trials
